PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'task': 'calib'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = calib_ET
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
  keyboardBackend = ioHub
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Routines
  Routine calib_cont
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        timeout = 10
        ave_error = 0
        vali_calib_points = 0
      Begin Routine:
        ave_error = calibration.last['SUMMARY']['AVE_ERROR']
        valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\n Valid Points: %d\n\nRecalibrate (y/n)?" % (ave_error,valid_calib_points)
      End Routine:
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  Routine calib_instr
    TextComponent calib_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We must first calibrate the eye tracker.

        Keep your eye on the calibration dot but don't anticipate its movement.

        Press space to continue.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = timeout
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    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
