PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'task': ''}
  Full-screen window = True
  Monitor = LabMonitor
  Save hdf5 file = True
  Screen = 1
  Show mouse = True
  Units = pix
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = Change Blindness
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
  keyboardBackend = ioHub
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Routines
  Routine calib_instr
    TextComponent calib_instr_text
      durationEstim = 1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We must first calibrate the eye tracker.

        Keep your eye on the calibration dot but don't anticipate its movement.

        Press space to continue.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calib_cont
    CodeComponent calib_code
      Code Type = Py
      Begin Experiment:
        calib_timeout = 10
        ave_error = 0
        valib_calib_points = 0
      Begin Routine:
        ave_error = calibration.last['SUMMARY']['AVE_ERROR']
        valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = f'Average error is: {ave_error}\n\nValid Points: {valid_calib_points}\n\nRecalibrate? (y/n)'
      End Routine:
        if calib_resp is not None and 'n' in calib_resp.keys:
            ioServer.sendMessageEvent(text=f'{ave_error}', category='ave_error')
            ioServer.sendMessageEvent(text=f'{valid_calib_points}', category='valid_points')
            calib_loop.finished = True
    TextComponent calib_text
      durationEstim = 1
      letterHeight = 20
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instr
    CodeComponent trial_instr_code
      Code Type = Py
      Begin Routine:
        trial_instructions = 'You are going to be shown a series of flashing images.\n\n Scan the image as if you were driving in that scenario. If you notice something change press space.\n\n'

        if int(expInfo['task']) == 1:
            trial_instructions += 'Read the passage at the bottom of the image as you scan the image. You will be asked three questions about the passage.\n\n'
        elif int(expInfo['task']) == 2:
            trial_instructions += 'Listen to the passage being read to you as you scan the image. You will be asked three questions about the passage.\n\n'

        trial_instructions += 'Press space when you are ready to begin'
    TextComponent trial_instr_text
      durationEstim = 1
      letterHeight = 20
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_instructions
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    KeyboardComponent trial_instr_resp
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_flicker
    SoundComponent audio_task
      durationEstim = 1
      sound [set every repeat] = stimuli/Audio/passage1_woodpecker.wav
      startEstim = 0
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    TextboxComponent visual_task
      alignment = center-left
      bold = False
      durationEstim = 1
      editable = False
      fillColor = -0.0667, 0.0667, 0.2000
      letterHeight = 18
      padding = 10
      pos = (130, -450)
      size = (550,200)
      startEstim = 0
      units = pix
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      text:
        Any text

        including line breaks
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        ioServer.sendMessageEvent(text=f'{win.units}', category='units')
        timeout = False
        interrupt = False
      Begin Routine:
        timeout = False
        interrupt = False

        trialDuration = 45
        blankDurationF = 15 # as frames ~0.25 seconds
        imageDurationF = 30 # as frames ~0.5 seconds
        taskDuration = int(thisTrial['task_dur']) # as seconds

        originalIsActive = True
        isBlanked = False

        imgs = thisTrial['trial_img'].split('$')
        original.image = imgs[0].strip()
        altered.image = imgs[1].strip()
        activeImage = original

        visualTask = False
        audioTask = False
        task = int(expInfo['task'])
        if task == 1:
            visualTask = True
            visual_task.text = thisTrial['trial_visual']
            with open(thisTrial['trial_visual']) as f:
                visual_task.text = f.read().split('$$$')[0].strip()
        elif task == 2:
            audioTask = True
            audio_task.setSound(thisTrial['trial_audio'], hamming=True)
            audio_task.setVolume(1.0)

        ioServer.sendMessageEvent(text=f'Trial {trials.thisN} start', category='trial')
        ioServer.sendMessageEvent(text=f'{original.image}', category='original')
        ioServer.sendMessageEvent(text=f'{altered.image}', category='altered')
        ioServer.sendMessageEvent(text=f'{task}', category='task')
      Each Frame:
        # Timeout or interrupt to end routine
        if t >= trialDuration:
            continueRoutine = False
            timeout = True
            continue
        elif trial_resp.keys in theseKeys:
            continueRoutine = False
            continue

        if frameN == 0:
            # Blank Initialization
            blank.tFlip = t
            blank.frameNFlip = frameN
            blank.tFlipRefresh = tThisFlipGlobal
            win.timeOnFlip(blank, 'tFlipRefresh')
            thisExp.timestampOnFlip(win, f'blank.paused')

            # Image Initialization
            activeImage.frameNStart = frameN
            activeImage.tStart = t
            activeImage.tStartRefresh = tThisFlipGlobal
            win.timeOnFlip(activeImage, 'tStartRefresh')
            thisExp.timestampOnFlip(win, f'{activeImage.name}.started')
            activeImage.status = STARTED
            activeImage.draw()

            # Task Initialization
            if visualTask:
                visual_task.frameNStart = frameN
                visual_task.tStart = t
                visual_task.tStartRefresh = tThisFlipGlobal
                win.timeOnFlip(visual_task, 'tStartRefresh')
                thisExp.timestampOnFlip(win, 'visual_task.started')
                visual_task.status = STARTED
                visual_task.setAutoDraw(True)
            elif audioTask:
                audio_task.frameNStart = frameN
                audio_task.tStart = t
                audio_task.tStartRefresh = tThisFlipGlobal
                thisExp.timestampOnFlip(win, 'audio_task.started')
                audio_task.status = STARTED
                audio_task.play(when=win)
            continue

        # Handle
        if visualTask:
            if tThisFlipGlobal >= visual_task.tStartRefresh + taskDuration:
                visual_task.tStop = t
                visual_task.frameNStop = frameN
                thisExp.timestampOnFlip(win, 'visual_task.stopped')
                visual_task.status = FINISHED
                visual_task.setAutoDraw(False)
        elif audioTask:
            if tThisFlipGlobal >= audio_task.tStartRefresh + taskDuration:
                audio_task.tStop = t
                audio_task.frameNStop = frameN
                thisExp.timestampOnFlip(win, 'audio_task.stopped')
                audio_task.status = FINISHED
                audio_task.stop()

        # Image handling
        # should happen every 0.5 seconds (30 frames)
        if frameN >= activeImage.frameNStart + imageDurationF:
            activeImage.tStop = t
            activeImage.frameNStop = frameN
            thisExp.timestampOnFlip(win, f'{activeImage.name}.paused')
            activeImage.status = PAUSED
            if originalIsActive:
                original = activeImage
                activeImage = altered
            else:
                altered = activeImage
                activeImage = original
            originalIsActive = not originalIsActive
            activeImage.frameNStart = frameN
            activeImage.tStart = t
            activeImage.tStartRefresh = tThisFlipGlobal
            win.timeOnFlip(activeImage, 'tStartRefresh')
            thisExp.timestampOnFlip(win, f'{activeImage.name}.started')
            activeImage.status = STARTED

        # Blank handling
        # should happen every 0.25 seconds (15 frames)
        if frameN >= blank.frameNFlip + blankDurationF:
            blank.tFlip = t
            blank.frameNFlip = frameN
            blank.tFlipRefresh = tThisFlipGlobal
            blank.status = PAUSED if isBlanked else STARTED
            status = 'paused' if isBlanked else 'started'
            win.timeOnFlip(blank, 'tFlipRefresh')
            thisExp.timestampOnFlip(win, f'blank.{status}')

            isBlanked = not isBlanked

        activeImage.draw()
        if isBlanked:
            blank.draw()
      End Routine:
        ioServer.sendMessageEvent(text=f'{not timeout}', category='detectionStatus')
        ioServer.sendMessageEvent(text=f'{t}', category='time')
    ImageComponent original
      durationEstim = 0.5
      startEstim = 0
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    ImageComponent blank
      durationEstim = 0.25
      image = stimuli/1920x1080/gray_box.png
      startEstim = 0.25
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    ImageComponent altered
      durationEstim = 0.5
      startEstim = 0.5
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    KeyboardComponent trial_resp
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      durationEstim = 1
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine task_confidence
    CodeComponent confidence_code
      Code Type = Py
      Begin Routine:
        if timeout:
            confidence_text.text = f'How confident are you that there was no change in the scene?'
        else:
            confidence_text.text = 'How confident are you that there was a change in the scene?'

        confidence_text.text = confidence_text.text + ' \nClick on the line and then press Space to confirm.'
      Each Frame:
        if confidence_resp.keys in theseKeys:
            if confidence_slider.getRating() is not None:
                ioServer.sendMessageEvent(text=f'{confidence_slider.getRating()}', category='confidence')
                continueRoutine = False
            else:
                confidence_resp.keys = []
    SliderComponent confidence_slider
      durationEstim = 1
      forceEndRoutine = False
      granularity = 1
      labels = 'not confident at all', 'slightly confident', 'somewhat confident', 'fairly confident', 'completely confident'
      letterHeight = 20
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 1, 2, 3, 4, 5
      units = pix
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    TextComponent confidence_text
      durationEstim = 1
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent confidence_resp
      allowedKeys [set every repeat] = 'space'
      durationEstim = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine task_questions
    TextboxComponent task_question_text
      bold = False
      durationEstim = 1
      editable = False
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent questions_code
      Code Type = Py
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      Begin Routine:
        if int(expInfo['task']) == 0:
            break
        with open(thisTrial['trial_visual']) as f:
            task_question_text.text = f.read().split('$$$')[1 + questions.thisN]
      End Routine:
        ioServer.sendMessageEvent(text=f'{questions_resp.keys}', category='response')
    KeyboardComponent questions_resp
      allowedKeys = 'a','b','c','d'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_cont
    TextComponent trial_cont_text
      durationEstim = 1
      letterHeight = 20
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space when you are ready to continue
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    KeyboardComponent key_resp_trial_cont
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trial_end_code
      Code Type = Py
      End Routine:
        ioServer.sendMessageEvent(text=f'Trial {trials.thisN} stop', category='trial')
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 3.5
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 10
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 3.5
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 10
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = calib_timeout
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    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
  Routine trial_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim.csv
    loopType = random
    nReps = 1
    random seed = int(expInfo['participant'])
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    conditions:
      [OrderedDict([('trial_img', './stimuli/1920x1080/set_1_1.jpg $ ./stimuli/1920x1080/set_1_2.jpg'), ('trial_audio', './stimuli/Audio/passage1_woodpecker.wav'), ('trial_visual', './stimuli/Visual/passage_1.txt'), ('task_dur', 41)]),
      OrderedDict([('trial_img', './stimuli/1920x1080/set_2_1.jpg $ ./stimuli/1920x1080/set_2_2.jpg'), ('trial_audio', './stimuli/Audio/passage2_scientific_method.wav'), ('trial_visual', './stimuli/Visual/passage_2.txt'), ('task_dur', 25)]),
      OrderedDict([('trial_img', './stimuli/1920x1080/set_3_1.jpg $ ./stimuli/1920x1080/set_3_2.jpg'), ('trial_audio', './stimuli/Audio/passage3_writing_topic.wav'), ('trial_visual', './stimuli/Visual/passage_3.txt'), ('task_dur', 26)]),
      OrderedDict([('trial_img', './stimuli/1920x1080/set_4_1.jpg $ ./stimuli/1920x1080/set_4_2.jpg'), ('trial_audio', './stimuli/Audio/passage4_skateboarding.wav'), ('trial_visual', './stimuli/Visual/passage_4.txt'), ('task_dur', 31)]),
      OrderedDict([('trial_img', './stimuli/1920x1080/set_5_1.jpg $ ./stimuli/1920x1080/set_5_2.jpg'), ('trial_audio', './stimuli/Audio/passage5_eye_tracking.wav'), ('trial_visual', './stimuli/Visual/passage_5.txt'), ('task_dur', 31)])]
    Routine image_flicker
    Routine task_confidence
    LoopInitiator questions loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine task_questions
    LoopTerminator questions
    Routine trial_cont
  LoopTerminator trials
